PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'أول حرف من الاسم و الشهرة': '', 'العمر': '', 'الجنس': '', 'بلد الإقامة': '', 'اللغة الأم': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2020.1.2
  Window size (pixels) = [1280, 800]
  expName = ChimericFaceTask
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Routines
  Routine StepQuestScreen
    MouseComponent mouseWelcome
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        mouseWelcome.setVisible(0)
    TextComponent textStepQuest
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 30
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      text:
        Please answer the following questions before we begin the experiment.


                                     Press SPACE to continue.
    KeyboardComponent keySpaceStepQuest
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Blank500
    TextComponent textBlank
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine Languages
    TextComponent InstrLanguages
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = [0.16,0.3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ما هي اللغة التي تعرفها بطلاقة أكثر من أي لغة أخرى؟
      wrapWidth = 2
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    TextComponent InstrLang2
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.15,0.2)
      startVal [time (s)] = 0.0
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      text:
        ١. الإنجليزية أو الفرنسية أو لغة أوروبية أخرى
    TextComponent InstrLang3
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.02, 0.1)
      startVal [time (s)] = 0.0
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      text:
        ٢. العربية، العبرية، الأردية، الفارسية، الآرامية، الآذرية أو الكردية
    TextComponent InstrLang4
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        ٣. الهندية أو الملايو أو غيرها من لغات جنوب آسيا أو جنوب شرق آسيا
    TextComponent InstrLang5
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.25, -0.1)
      startVal [time (s)] = 0.0
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      text:
        ٤. الصينية أو اليابانية أو الكورية
    TextComponent InstrLang6
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.11, -0.2)
      startVal [time (s)] = 0.0
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      text:
        ٥. الأمهرية أو البربرية أو غيرها من اللغات الأفريقية
    TextComponent InstrLang7
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
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      text:
        ٦. أخرى
    KeyboardComponent fluentLang
      allowedKeys = '1','2','3','4', '5', '6','space'
      forceEndRoutine = True
      saveStartStop = False
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    TextComponent spaceTextLang
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة 
      units = height
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  Routine TimeAr
    TextComponent textLongCountAr
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ما المدة التي عشت خلالها في بلد حيث اللغة العربية أو العبرية أو الأردية أو الفارسية أو الآرامية هي اللغة السائدة للتواصل؟
      wrapWidth = 27
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    TextComponent spaceContinue_2
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة 
      units = height
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    TextComponent Option1
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.20)
      startVal [time (s)] = 0.0
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      text:
        ١.صفر سنوات
    TextComponent Option2
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.02, 0.15)
      startVal [time (s)] = 0.0
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      text:
        ٢.أقل من سنة واحدة
    TextComponent Option3
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.02, 0.10)
      startVal [time (s)] = 0.0
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      text:
        ٣. بين ٢-٣ سنوات
    TextComponent Option4
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.02, 0.05)
      startVal [time (s)] = 0.0
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      text:
        ٤. بين ٤-٧ سنوات
    TextComponent Option5
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.02, 0.0)
      startVal [time (s)] = 0.0
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      text:
        ٥. أكثر من ٧ سنوات
    KeyboardComponent arbCountryTime
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_space_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine CountryAr
    TextComponent textCountAr
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 27
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      text:
        هل سبق لك أن عشت في بلد حيث اللغة العربية أو العبرية أو الأردية أو الفارسية أو الآرامية هي اللغة السائدة للتواصل ؟
    TextComponent presskey
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = للإجابة على هذا السؤال لا تستخدم الماوس بل اضغط على الرقم المناسب لاجابتك على لوحة المفاتيح
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    TextComponent textYes
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.37, 0)
      startVal [time (s)] = 0.0
      text = ١.نعم
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    TextComponent textNo
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.37, -0.1)
      startVal [time (s)] = 0.0
      text = ٢.لا
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    KeyboardComponent arbCountryYN
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_space_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spaceContinue
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة 
      units = height
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  Routine Handedness
    TextComponent textHandedness
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.03, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 27
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      text:
        يرجى الاشارة إلى أي يد تفضل استخدام أثناء

        استخدم الماوس للرد على هذه الأسئلة
    SliderComponent writeHand
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = "اليمين دائما", "اليمين عادة", "كلاهما بالتساوي", "اليسار عادة","اليسار دائما"
      pos = (-0.2, 0.2)
      saveStartStop = False
      size = (0.8, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ('rating',)
      ticks = (1, 2, 3, 4, 5)
      units = height
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    SliderComponent throwHand
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = "اليمين دائما", "اليمين عادة", "كلاهما بالتساوي", "اليسار عادة","اليسار دائما"
      pos = (-0.2, 0.08)
      saveStartStop = False
      size = (0.8, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ('rating',)
      ticks = (1,2,3,4,5)
      units = height
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    SliderComponent toothHand
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = "اليمين دائما", "اليمين عادة", "كلاهما بالتساوي", "اليسار عادة","اليسار دائما"
      pos = (-0.2, -0.04)
      saveStartStop = False
      size = (0.8, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ('rating',)
      ticks = (1,2,3,4,5)
      units = height
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    SliderComponent spoonHand
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = "اليمين دائما", "اليمين عادة", "كلاهما بالتساوي", "اليسار عادة","اليسار دائما"
      pos = (-0.2, -0.16)
      saveStartStop = False
      size = (0.8, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ('rating',)
      ticks = (1,2,3,4,5)
      units = height
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    TextComponent writeHandLabel
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.4, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = القراءة
      units = height
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    TextComponent throwHandLabel
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.4, 0.08)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        الرمي
    TextComponent toothHandLabel
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.43, -0.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = استخدام فرشاة الأسنان
      units = height
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    TextComponent spoonHandLabel
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.40, -0.16)
      startVal [time (s)] = 0.0
      text = استخدام الملعقة
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    TextComponent textSpaceHand
      color = Black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة 
      wrapWidth = 27
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    KeyboardComponent keySpaceHand
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ProficiencyEng
    TextComponent textProficiencyEng
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        ما مدى إتقانك للغة الإنجليزية أو أي لغة مكتوبة من اليسار إلى اليمين؟
    TextComponent MouseInstruction
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.18, 0.28)
      startVal [time (s)] = 0.0
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      text:
        استخدم الماوس للرد على هذه الأسئلة
    SliderComponent engSpeak
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
      units = height
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    SliderComponent engRead
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
      units = height
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    SliderComponent engWrite
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
      units = height
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    TextComponent eSpeakLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = التكلم
      units = height
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    TextComponent eReadLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = القراءة
      units = height
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    TextComponent eWriteLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = الكتابة
      units = height
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    TextComponent spaceText
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة 
      units = height
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    KeyboardComponent spaceKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouseProf
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ProficiencyAr
    TextComponent textProficiencyArb
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.32)
      startVal [time (s)] = 0.0
      text = ما مدى إتقانك للغة العربية أو العبرية أو الأردية أو أي لغة مكتوبة من اليمين إلى اليسار؟
      wrapWidth = 2
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    TextComponent text_7
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.22, 0.26)
      startVal [time (s)] = 0.0
      text = استخدم الماوس للرد على هذه الأسئلة  
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    SliderComponent ArSpeak
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.5,0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent ArRead
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      saveStartStop = False
      size = (0.5,0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent ArWrite
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5,0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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    TextComponent arSpeakLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = التكلم
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    TextComponent arReadLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = القراءة
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    TextComponent arWriteLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = الكتابة
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    TextComponent textSpaceAr
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة 
      wrapWidth = 27
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    KeyboardComponent keySpaceAr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ActivitiesAr
    TextComponent textActivitiesAr
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 2
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      text:
        إلى أي مدى تستخدم اللغة العربية أو لغة مكتوبة من اليمين إلى اليسار أثناء؟
    TextComponent text_9
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.18, 0.26)
      startVal [time (s)] = 0.0
      text = استخدم الماوس للرد على هذه الأسئلة
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    SliderComponent arSpeakFreq
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1,2,3,4,5)
      units = height
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    SliderComponent arListenFreq
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, 0.08)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1,2,3,4,5)
      units = height
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    SliderComponent arReadFreq
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, -0.04)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1,2,3,4,5)
      units = height
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    SliderComponent arWriteFreq
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, -0.16)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1,2,3,4,5)
      units = height
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    TextComponent aSpeakLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = التكلم
      units = height
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    TextComponent aListenLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, 0.08)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        الإصغاء
    TextComponent aReadLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, -0.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = القراءة
      units = height
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    TextComponent aWriteLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, -0.16)
      startVal [time (s)] = 0.0
      text = الكتابة
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    TextComponent textSpaceActivitiesAr
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة 
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    KeyboardComponent keySpaceActivitiesAr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ActivitiesEng
    TextComponent textActivitiesEng
      color = black
      letterHeight = 0.04
      pos = (0, 0.32)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        إلى أي مدى تستخدم اللغة الإنجليزية أو لغة مكتوبة من اليسار إلى اليمين أثناء؟
    TextComponent text_6
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.18, 0.26)
      startVal [time (s)] = 0.0
      text = استخدم الماوس للرد على هذه الأسئلة  
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    SliderComponent engSpeakFreq
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1,2,3,4,5)
      units = height
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    SliderComponent engListenFreq
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, 0.08)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1,2,3,4,5)
      units = height
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    SliderComponent engReadFreq
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, -0.04)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1,2,3,4,5)
      units = height
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    SliderComponent engWriteFreq
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (4, '', 2, '', 0)
      pos = (0, -0.16)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1,2,3,4,5)
      units = height
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    TextComponent engSpeakLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = التكلم
      units = height
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    TextComponent engListenLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, 0.08)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        الإصغاء
    TextComponent engReadLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, -0.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = القراءة
      units = height
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    TextComponent engWriteLabel
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.35, -0.16)
      startVal [time (s)] = 0.0
      text = الكتابة
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    TextComponent textSpaceActivitiesEng
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة 
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    KeyboardComponent keyActivitiesEng
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouseActEng
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ReadingEng
    TextComponent hoursReading
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = كم ساعة في اليوم تقضيها في قراءة مواد (إما مطبوعة أو على الإنترنت) باللغة الإنجليزية أو لغة مكتوبة من اليسار إلى اليمين؟
      wrapWidth = 2
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    TextComponent text_8
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.37, 0.25)
      startVal [time (s)] = 0.0
      text = استخدم الماوس للرد على هذه الأسئلة  
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    SliderComponent slider_engReadHrs
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = '8+', '8-6', '6-4', '4-2', '<2'
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.5,0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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    TextComponent space
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة 
      units = height
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    KeyboardComponent key_reading
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ReadingAr
    TextComponent readingAr
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = كم ساعة في اليوم  تقضيها في قراءة مواد (إما مطبوعة أو على الإنترنت) باللغة العربية أو لغة مكتوبة من اليمين إلى اليسار؟
      units = height
      wrapWidth = 27
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    TextComponent text_10
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.37, 0.25)
      startVal [time (s)] = 0.0
      text = استخدم الماوس للرد على هذه الأسئلة
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    TextComponent spaceContinue_3
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة 
      units = height
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    KeyboardComponent key_space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    SliderComponent arReadHrs
      color = White
      forceEndRoutine = False
      granularity = 1
      labels =  '8+','8-6','6-4', '4-2','<2'
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.5,0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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  Routine Q_Finish
    TextComponent QDone
      color = Black
      languageStyle = Arabic
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
         اكتمل الاستبيان
    TextComponent text_11
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        اضغط على شريط المسافة لمتابعة التجربة
    KeyboardComponent finishQKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ConsentForm
    ImageComponent consentForm
      image [set every repeat] = $image
      saveStartStop = False
      size = (0.7, 0.9)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    TextComponent spaceConsent
      color = Black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        الرجاء قراءة استمارة الموافقة
        و الضغط على شريط المسافة
         للمتابعة (space bar)
    KeyboardComponent key_resp
      allowedKeys = "space"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.
      store = nothing
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  Routine PracticeInstr
    TextComponent practiceInstr
      color = Black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.0, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        في هذه المهمة، ستحدد مدى تشابه الوجوه. سيظهر لك ٣ وجوه على الشاشة في كل محاولة. الوجه في وسط الشاشة هو الهدف
    TextComponent textSpacePractInstr
      color = Black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة
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    TextComponent practiceInst2
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.03, 0.20)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        اضغط على السهم الأيسر على لوحة المفاتيح إذا كان الوجه الموجود على اليسار يشبه أكثر الوجه الموجود في وسط الشاشة
    TextComponent practiceInstr3
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.03, 0.1)
      startVal [time (s)] = 0.0
      text =  إذا كان الوجه الموجود على اليمين يبدو أكثر مثل الوجه الموجود في وسط الشاشة فاضغط على السهم الأيمن على لوحة المفاتيح
      wrapWidth = 2
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    TextComponent practiceInstr4
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.03, -0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        ليس هناك جواب صحيح أو خاطئ. في بعض الأحيان، قد يكون من الصعب اتخاذ قرار، هذا أمر طبيعي تماما
    TextComponent practiceInstr5
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.03, -0.15)
      startVal [time (s)] = 0.0
      text = ستبدأ أولا ببعض المحاولات التدريبية تليها التجربة الرئيسية
      wrapWidth = 2
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    KeyboardComponent SpacePracticInst
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent mouseCode
      Code Type = Auto->JS
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      Begin Experiment:
        mouse.setVisible(False)
  Routine PracticeTrials
    ImageComponent imageCenterPract
      image [set every repeat] = $Image
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    ImageComponent imageLVFPract
      image [set every repeat] = $LVF
      pos [set every repeat] = (-0.45, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    ImageComponent imageRVFPract
      image [set every repeat] = $RVF
      pos [set every repeat] = (0.45, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    KeyboardComponent keyChimericPract
      allowedKeys [set every repeat] = 'left','right','escape'
      correctAns = $correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent imageCentLabel
      color = Black
      languageStyle = Arabic
      letterHeight = 0.025
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = الهدف
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    TextComponent imageLVFLabel
      color = Black
      languageStyle = Arabic
      letterHeight = 0.025
      pos = (-0.45, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        اضغط على مفتاح السهم الأيسر
        إذا كنت تعتقد أن هذا الوجه
        يبدو أكثر مثل الهدف
    TextComponent imageRVFLabel
      color = Black
      languageStyle = Arabic
      letterHeight = 0.025
      pos = (0.45, -0.2)
      startVal [time (s)] = 0.0
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      text:
        اضغط على مفتاح السهم الأيمن
        إذا كنت تعتقد أن هذا الوجه
        يبدو أكثر مثل الهدف
  Routine TrialsInstr
    TextComponent trialsInstr1
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ستبدأ الآن التجربة الفعلية
      wrapWidth = 1
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    TextComponent trialsInstr2
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.20)
      startVal [time (s)] = 0.0
      text = الوجه في الوسط هو الوجه الهدف
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    TextComponent trialsInstr3
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.10)
      startVal [time (s)] = 0.0
      text =  إذا كان الوجه الموجود على اليسار يشبه أكثر الوجه في الوسط فاضغط على السهم الأيسر
      wrapWidth = 2
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    TextComponent trialsInstr4
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      text = اضغط على السهم الأيمن إذا كان الوجه الموجود على اليمين يشبه أكثر الوجه في الوسط
      wrapWidth = 2
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    TextComponent trialsInstr5
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.10)
      startVal [time (s)] = 0.0
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      text:
        ليس هناك جواب صحيح أو خاطئ
    TextComponent textSpaceTrials
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة
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    KeyboardComponent keySpaceTrialsInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ChimericTrials
    ImageComponent imageCenter
      image [set every repeat] = $Image
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    ImageComponent imageLVF
      image [set every repeat] = $LVF
      pos [set every repeat] = (-0.45, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    ImageComponent imageRVF
      image [set every repeat] = $RVF
      pos [set every repeat] = (0.45, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    KeyboardComponent keyChimeric
      allowedKeys [set every repeat] = 'left','right','escape'
      correctAns = $correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine EndScreen
    TextComponent End
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        شكرا لك على مشاركتك في هذه الدراسة

        اضغط على مفتاح الهروب  للخروج
        (esc)
    KeyboardComponent keyEnd
      allowedKeys = 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AcceptConsent
    TextComponent text
      color = Black
      languageStyle = Arabic
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        إذا قرأت المعلومات المذكورة أعلاه ووافقت عليها

         يرجى الضغط على شريط المسافة للبدء بالدراسة
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Qstart
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = Black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = أولاً، سوف نطرح عليك بعض الأسئلة حول معرفتك اللغوية    
      wrapWidth = 1
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    TextComponent text_3
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.03, 0)
      startVal [time (s)] = 0.0
      text = و بعد ذلك، ستقوم بالمهمة التجريبية
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    TextComponent text_4
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.01, -0.1)
      startVal [time (s)] = 0.0
      text = ستستغرق التجربة بأكملها حوالي  30 دقيقة
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    TextComponent text_5
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0.02, -0.2)
      startVal [time (s)] = 0.0
      text = اضغط على شريط المسافة للمتابعة
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Flow
  LoopInitiator consentFormLoop loopType="TrialHandler"
    conditionsFile = consentForm.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image', 'Consent Form/consent1.PNG')]),
      OrderedDict([('image', 'Consent Form/consent2.PNG')]),
      OrderedDict([('image', 'Consent Form/consent3.PNG')]),
      OrderedDict([('image', 'Consent Form/consent4.PNG')])]
    Routine ConsentForm
    Routine Blank500
  LoopTerminator consentFormLoop
  Routine AcceptConsent
  Routine Blank500
  Routine Qstart
  Routine Blank500
  Routine Languages
  Routine Blank500
  Routine ProficiencyEng
  Routine Blank500
  Routine ActivitiesEng
  Routine Blank500
  Routine ReadingEng
  Routine Blank500
  Routine ProficiencyAr
  Routine Blank500
  Routine ActivitiesAr
  Routine Blank500
  Routine ReadingAr
  Routine Blank500
  Routine TimeAr
  Routine Blank500
  Routine Handedness
  Routine Blank500
  Routine Q_Finish
  Routine Blank500
  Routine PracticeInstr
  Routine Blank500
  LoopInitiator trialsPractice loopType="TrialHandler"
    conditionsFile = PracticeStimuliPavlovia.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Image', 'Face Images/O2.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL2.jpeg'), ('RVF', 'Face Images/RR2.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O57.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL57.jpeg'), ('RVF', 'Face Images/RR57.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O63.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL63.jpeg'), ('RVF', 'Face Images/RR63.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O2.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/RR2.jpeg'), ('RVF', 'Face Images/LL2.jpeg'), ('correct', 'right')]),
      OrderedDict([('Image', 'Face Images/O3.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/RR3.jpeg'), ('RVF', 'Face Images/LL3.jpeg'), ('correct', 'right')])]
    Routine PracticeTrials
    Routine Blank500
  LoopTerminator trialsPractice
  Routine TrialsInstr
  Routine Blank500
  LoopInitiator trialsChimeric loopType="TrialHandler"
    conditionsFile = ImageStimuliPavlovia.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Image', 'Face Images/O1.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL1.jpeg'), ('RVF', 'Face Images/RR1.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O4.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL4.jpeg'), ('RVF', 'Face Images/RR4.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O8.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL8.jpeg'), ('RVF', 'Face Images/RR8.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O10.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL10.jpeg'), ('RVF', 'Face Images/RR10.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O11.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL11.jpeg'), ('RVF', 'Face Images/RR11.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O19.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL19.jpeg'), ('RVF', 'Face Images/RR19.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O20.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL20.jpeg'), ('RVF', 'Face Images/RR20.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O22.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL22.jpeg'), ('RVF', 'Face Images/RR22.jpeg'), ('correct', 'left')]),
      OrderedDict([('Image', 'Face Images/O28.jpeg'), ('Mirror', 'Original'), ('LVF', 'Face Images/LL28.jpeg'), ('RVF', 'Face Images/RR28.jpeg'), ('correct', 'left')])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
    Routine ChimericTrials
    Routine Blank500
  LoopTerminator trialsChimeric
  Routine EndScreen
