PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2020.1.2
  Window size (pixels) = [1280, 800]
  expName = ChimericFaceTask
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Routines
  Routine Blank500
    TextComponent textBlank
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine PracticeInstr
    TextComponent practiceInstr
      color = Black
      letterHeight = 0.03
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        In this task, you will judge facial resemblance.

        You will be presented with 3 faces on the screen on each trial.

        The center face is the target face.

        Press the LEFT arrow key if the face on the left looks more like the target.
        Press the RIGHT key if the face on the right looks more like the target.

        There is no right or wrong answer. Sometimes it will be hard to decide - this is perfectly normal.

        There will be a few practice trials followed by the main experiment.
    TextComponent textSpacePractInstr
      color = Black
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue
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    KeyboardComponent SpacePracticInst
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent mouseCode
      Code Type = Auto->JS
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      Begin Experiment:
        mouse.setVisible(False)
  Routine PracticeTrials
    ImageComponent imageCenterPract
      image [set every repeat] = $Image
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    ImageComponent imageLVFPract
      image [set every repeat] = $LVF
      pos [set every repeat] = (-0.45, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    ImageComponent imageRVFPract
      image [set every repeat] = $RVF
      pos [set every repeat] = (0.45, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    KeyboardComponent keyChimericPract
      allowedKeys [set every repeat] = 'left','right','escape'
      correctAns = $correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent imageCentLabel
      color = Black
      letterHeight = 0.025
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = TARGET FACE
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    TextComponent imageLVFLabel
      color = Black
      letterHeight = 0.025
      pos = (-0.45, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press the LEFT arrow key
        if you think this face
        looks more like the target
    TextComponent imageRVFLabel
      color = Black
      letterHeight = 0.025
      pos = (0.45, -0.2)
      startVal [time (s)] = 0.0
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      text:
        Press the RIGHT arrow key
        if you think this face
        looks more like the target
  Routine TrialsInstr
    TextComponent trialsInstr
      color = black
      letterHeight = 0.03
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        You will now begin the actual experiment

        The face in the center is the target face.

        Press the LEFT key if the face on the left looks more like the target.

        Press the RIGHT key if the face on the right looks more like the target.

        There is no right or wrong answer.
    TextComponent textSpaceTrials
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue
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    KeyboardComponent keySpaceTrialsInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ChimericTrials
    ImageComponent imageCenter
      image [set every repeat] = $Image
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    ImageComponent imageLVF
      image [set every repeat] = $LVF
      pos [set every repeat] = (-0.45, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    ImageComponent imageRVF
      image [set every repeat] = $RVF
      pos [set every repeat] = (0.45, 0)
      saveStartStop = False
      size = 0.26
      startVal [time (s)] = 0.0
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    KeyboardComponent keyChimeric
      allowedKeys [set every repeat] = 'left','right','escape'
      correctAns = $correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine EndScreen
    TextComponent textEnd
      color = Black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in the study!

        The purpose of this study is to examine whether habitual reading direction affects the way faces are perceived.

        Previous studies have found that humans judge the left side of the face more similar to the whole face than the right side of the face.

        Humans also look at the left side of the face more than the right side of the face when identifying faces.

        This study will compare these face perception biases in readers of English (and other languages with right-to-left script) with readers of Arabic (and other languages with left-to-right script).

        Press escape to exit.
    KeyboardComponent keyEnd
      allowedKeys = 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine PracticeInstr
  Routine Blank500
  LoopInitiator trialsPractice loopType="TrialHandler"
    conditionsFile = PracticeStimuliPavlovia.xlsx
    loopType = random
    nReps = 1
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    Routine PracticeTrials
    Routine Blank500
  LoopTerminator trialsPractice
  Routine TrialsInstr
  Routine Blank500
  LoopInitiator trialsChimeric loopType="TrialHandler"
    conditionsFile = ImageStimuliPavlovia.xlsx
    loopType = random
    nReps = 1
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    Routine ChimericTrials
    Routine Blank500
  LoopTerminator trialsChimeric
  Routine EndScreen
